CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "gfp")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:GFP
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):50,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MaskImage:[module_num:6|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
    Select the input image:GFP
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Objects
    Select object for mask:IdentifyPrimaryObjects
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    Invert the mask?:No

ConvertObjectsToImage:[module_num:7|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segmentation
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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